PsychoPy2experiment version="2023.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 0.0588, 0.6157, 0.9608
  expName = test_of_variable_attention
  keyboardBackend = ioHub
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Routines
  Routine Instructions
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    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this experiment you will be required to observe the grey square. When the grey square is at the top press space key. Otherwise if the square is at the bottom do NOT press anything. Press space to start the experiment.
      wrapWidth = 0.8
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Fixation
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine Trial
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    TextComponent instruct_text
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.1
      text = Press space when the square is at the top.
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    PolygonComponent background_square
      fillColor = $[1,1,1]
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.1
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    PolygonComponent square
      fillColor = $[0.004,0.004,0.004]
      lineWidth = 0
      pos [set every repeat] = $position
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      units = height
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    TextComponent mask
      letterHeight = 0.05
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 2
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    KeyboardComponent response
      allowedKeys = 'space'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      storeCorrect = True
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  Routine End
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    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.
        Thank you for your time.
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [{'position': [0, 0.15], 'corrAns': 'space'},
      {'position': [0, -0.15], 'corrAns': 'none'},
      {'position': [0, -0.15], 'corrAns': 'none'},
      {'position': [0, -0.15], 'corrAns': 'none'}]
    Routine Fixation
    Routine Trial
  LoopTerminator trials
  Routine End
